opentrons/protocol-designer 5.2.6
schemaVersion: 3
protocolName: Nutrient + Media loading (basic template)
robot: {model: OT-2 Standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 0.5, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipettes:
  p1000_single: {mount: left}
  p10_single: {mount: right}
labware:
  Trash: {definitionId: opentrons/opentrons_1_trash_1100ml_fixed/1, slot: 12}
  Opentrons 96 Tip Rack 1000 µL: {definitionId: opentrons/opentrons_96_tiprack_1000ul/1, slot: 7}
  Opentrons 96 Tip Rack 10 µL: {definitionId: opentrons/opentrons_96_tiprack_10ul/1, slot: 5}
  NaNO3 in H20 - 12 Well: {definitionId: opentrons/corning_12_wellplate_6.9ml_flat/1, slot: 10}
  Corning 96 Well Plate 360 µL Flat: {definitionId: opentrons/corning_96_wellplate_360ul_flat/1, slot: 8}
  1xK - 12 Well: {definitionId: opentrons/corning_12_wellplate_6.9ml_flat/1, slot: 6}
  Ca(H2PO4)2 in H2O - 12 Well: {definitionId: opentrons/corning_12_wellplate_6.9ml_flat/1, slot: 11}
  KCl in H2O - 12 Well: {definitionId: opentrons/corning_12_wellplate_6.9ml_flat/1, slot: 9}
pipetteTiprackAssignments:
  p1000_single: opentrons/opentrons_96_tiprack_1000ul/1
  p10_single: opentrons/opentrons_96_tiprack_10ul/1
ingredients:
  - N-0: {serialize: true}
  - N-5: {serialize: true}
  - N-10: {serialize: true}
  - N-15: {serialize: true}
  - N-20: {serialize: true}
  - N-25: {serialize: true}
  - N-30: {serialize: true}
  - N-35: {serialize: true}
  - N-40: {serialize: true}
  - N-45: {serialize: true}
  - 1xK: {serialize: true}
  - P-0: {serialize: true}
  - P-2: {serialize: true}
  - P-4: {serialize: true}
  - P-6: {serialize: true}
  - P-8: {serialize: true}
  - P-10: {serialize: true}
  - P-12: {serialize: true}
  - P-14: {serialize: true}
  - P-16: {serialize: true}
  - P-18: {serialize: true}
  - K-0: {serialize: true}
  - K-5: {serialize: true}
  - K-10: {serialize: true}
  - K-15: {serialize: true}
  - K-20: {serialize: true}
  - K-25: {serialize: true}
  - K-30: {serialize: true}
  - K-35: {serialize: true}
  - K-40: {serialize: true}
  - K-45: {serialize: true}
ingredLocations:
  NaNO3 in H20 - 12 Well:
    N-0 {volume: 5000}: A1
    N-5 {volume: 5000}: A2
    N-10 {volume: 5000}: A3
    N-15 {volume: 5000}: A4
    N-20 {volume: 5000}: B1
    N-25 {volume: 5000}: B2
    N-30 {volume: 5000}: B3
    N-35 {volume: 5000}: B4
    N-40 {volume: 5000}: C1
    N-45 {volume: 5000}: C2
  1xK - 12 Well:
    1xK {volume: 5000}: A1-C1, A2-C2
  Ca(H2PO4)2 in H2O - 12 Well:
    P-0 {volume: 5000}: A1
    P-2 {volume: 5000}: A2
    P-4 {volume: 5000}: A3
    P-6 {volume: 5000}: A4
    P-8 {volume: 5000}: B1
    P-10 {volume: 5000}: B2
    P-12 {volume: 5000}: B3
    P-14 {volume: 5000}: B4
    P-16 {volume: 5000}: C1
    P-18 {volume: 5000}: C2
  KCl in H2O - 12 Well:
    K-0 {volume: 5000}: A1
    K-5 {volume: 5000}: A2
    K-10 {volume: 5000}: A3
    K-15 {volume: 5000}: A4
    K-20 {volume: 5000}: B1
    K-25 {volume: 5000}: B2
    K-30 {volume: 5000}: B3
    K-35 {volume: 5000}: B4
    K-40 {volume: 5000}: C1
    K-45 {volume: 5000}: C2
savedStepForms:
- stepType: moveLiquid
  stepName: 1xK - Rows A+B
  pipette: p1000_single
  volume: 120
  path: single
  changeTip: once
  aspirate_labware: 1xK - 12 Well
  aspirate_wells: A1
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  dispense_labware: Corning 96 Well Plate 360 µL Flat
  dispense_wells: A1, B1, A2, B2, A3, B3, A4, B4, A5, B5, A6, B6, A7, B7, A8, B8, A9, B9, A10, B10, A11, B11, A12, B12
  dispense_wellOrder_first: l2r
  dispense_wellOrder_second: t2b
- stepType: moveLiquid
  stepName: 1xK - Rows C+D
  pipette: p1000_single
  volume: 120
  path: single
  changeTip: once
  aspirate_labware: 1xK - 12 Well
  aspirate_wells: B1
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  dispense_labware: Corning 96 Well Plate 360 µL Flat
  dispense_wells: C1, D1, C2, D2, C3, D3, C4, D4, C5, D5, C6, D6, C7, D7, C8, D8, C9, D9, C10, D10, C11, D11, C12, D12
  dispense_wellOrder_first: l2r
  dispense_wellOrder_second: t2b
- stepType: moveLiquid
  stepName: 1xK - Rows E+F
  pipette: p1000_single
  volume: 120
  path: single
  changeTip: once
  aspirate_labware: 1xK - 12 Well
  aspirate_wells: C1
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  dispense_labware: Corning 96 Well Plate 360 µL Flat
  dispense_wells: E1, F1, E2, F2, E3, F3, E4, F4, E5, F5, E6, F6, E7, F7, E8, F8, E9, F9, E10, F10, E11, F11, E12, F12
  dispense_wellOrder_first: l2r
  dispense_wellOrder_second: t2b
- stepType: moveLiquid
  stepName: 1xK - Rows G+H
  pipette: p1000_single
  volume: 120
  path: single
  changeTip: once
  aspirate_labware: 1xK - 12 Well
  aspirate_wells: A2
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  dispense_labware: Corning 96 Well Plate 360 µL Flat
  dispense_wells: G1, H1, G2, H2, G3, H3, G4, H4, G5, H5, G6, H6, G7, H7, G8, H8, G9, H9, G10, H10, G11, H11, G12, H12
  dispense_wellOrder_first: l2r
  dispense_wellOrder_second: t2b
labwareDefinitions:
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commands:
- pickUpTip: {pipette: p1000_single, labware: Opentrons 96 Tip Rack 1000 µL, well: A1}
- aspirate: {pipette: p1000_single, volume: 120, labware: 1xK - 12 Well, well: A1, offsetFromBottomMm: 1, flowRate: 500}
- dispense: {pipette: p1000_single, volume: 120, labware: Corning 96 Well Plate 360 µL Flat, well: A1, offsetFromBottomMm: 0.5, flowRate: 1000}
- aspirate: {pipette: p1000_single, volume: 120, labware: 1xK - 12 Well, well: A1, offsetFromBottomMm: 1, flowRate: 500}
- dispense: {pipette: p1000_single, volume: 120, labware: Corning 96 Well Plate 360 µL Flat, well: A2, offsetFromBottomMm: 0.5, flowRate: 1000}
- aspirate: {pipette: p1000_single, volume: 120, labware: 1xK - 12 Well, well: A1, offsetFromBottomMm: 1, flowRate: 500}
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